'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Wheat pile emission scoping study May 2018
'
' Source code for stationary station (background) logger. Responsible for:
'   * TSI DustTrak II - aerosol monitor
'   * LICOR Biosciences LI-840A - CO2 analyzer
'   * Garmin GPS16X-HVS - GPS receiver
'
' Copyright 2018 :: Patrick O'Keeffe
' Laboratory for Atmospheric Research at Washington State University
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

Const UTC_OFFSET = -7 'Pacific Daylight Time
Const DAYS_OF_DATA = 7

'HINT edit this value using the Public table!
Public csat3b_azimuth = 0 'direction sonic array is pointing wrt True North
Units csat3b_azimuth = degreesEofN


'---------- NO USER SERVICEABLE PARTS BELOW THIS LINE ;) -----------------
Const CSAT_SDM_ADDR = 3
Const DperR = 180/3.14159 'unit conversion
Const CSAT_VAZ = 90 'sensor-specific geometry indicator

Const LI840A_COM = Com4
Const LI840A_BAUD = 9600
Const LI840A_FMT = 3 '8/n/1, RS232 logic
Const LI840A_REC = 120
Const LI840A_BUFF = LI840A_REC*2 + 1

Const GPS_COM_ADDR    = Com3  'GPS serial input port #

Const DF_TSI_PM = 1
'Const TSI_PM_OFF = 0.0103 'XXXX unit-specific calibration offset (sn 8530152108)
'Const TSI_PM_MLT = (1.0 - TSI_PM_OFF)/5000 '0-1.0 mg/m^3, 0-5V
Const TSI_PM_OFF = 0.008 'XXXX unit-specific calibration offset (sn 8530150710)
Const TSI_PM_MLT = (1.0 - TSI_PM_OFF)/5000 '0-1.0 mg/m^3, 0-5V

Const DF_LI840A_CO2 = 3
Const LI840A_CO2_OFF = 0 'ppm
Const LI840A_CO2_MLT = (2500 - LI840A_CO2_OFF)/5000 '0-5000ppm, 0-5V


Public CSATvals(5)
Alias CSATvals(1) = csat3b_Ux
Alias CSATvals(2) = csat3b_Uy
Alias CSATvals(3) = csat3b_Uz
Alias CSATvals(4) = csat3b_sonicTemp
Alias CSATvals(5) = csat3b_diag
Units CSATvals = m/s
Units csat3b_sonicTemp = degC
Units csat3b_diag = arb

Public CSATmeta(4)
Alias CSATmeta(1) = csat3b_boardTemp
Alias CSATmeta(2) = csat3b_boardHumidity
Alias CSATmeta(3) = csat3b_inclinePitch
Alias CSATmeta(4) = csat3b_inclineRoll
Units csat3b_boardTemp = degC
Units csat3b_boardHumidity = %
Units csat3b_inclinePitch = degrees
Units csat3b_inclineRoll = degrees

Public li840a_config As String * 300
Public li840a_resp As String * 32
Public li840a_record As String * LI840A_REC
Public li840a(6)
Alias li840a(1) = li840a_cell_T
Alias li840a(2) = li840a_cell_P
Alias li840a(3) = li840a_CO2
Alias li840a(4) = li840a_pwr_src
Alias li840a(5) = li840a_H2O
Alias li840a(6) = li840a_dewpoint
Units li840a_cell_T = degC
Units li840a_cell_P = kPa
Units li840a_CO2 = ppm
Units li840a_pwr_src = Vdc
Units li840a_H2O = ppth
Units li840a_dewpoint = degC

Public li840a_analog_CO2
Units li840a_analog_CO2 = ppm

Public dusttrak2_analog_pm25
Units dusttrak2_analog_pm25 = mg/m^3

Dim nmea_sentence(2) As String * 90
Public gps_data(15)
Alias gps_data(1) = latitude_deg              'Degrees latitude (+ = East; - = West)
Alias gps_data(2) = latitude_min              'Minutes latitude
Alias gps_data(3) = longitude_deg             'Degress longitude (+ = East; - = West)
Alias gps_data(4) = longitude_min             'Minutes longitude
Alias gps_data(5) = speed                   'Speed
Alias gps_data(6) = course                  'Course over ground
Alias gps_data(7) = mag_variation      'Magnetic variation from true north (+ = East; - = West)
Alias gps_data(8) = fix_quality             'GPS fix quality: 0 = invalid, 1 = GPS, 2 = 'differential GPS, 6 = estimated
Alias gps_data(9) = nmbr_satellites         'Number of satellites used for fix
Alias gps_data(10) = altitude               'Antenna altitude
Alias gps_data(11) = pps                    'Elapsed ms since last pulse per second (PPS) from GPS
Alias gps_data(12) = dt_since_gprmc         'Time since last GPRMC string, normally less than '1 second
Alias gps_data(13) = gps_ready              'Counts from 0 to 10, 10 = ready
Alias gps_data(14) = max_clock_change       'Maximum value the clock was changed
Alias gps_data(15) = nmbr_clock_change      'Number of times the clock was changed
Units latitude_min = degreesN
Units latitude_deg = minutesN
Units longitude_min = degreesE
Units longitude_deg = minutesE
Units speed = m/s
Units course = degreesEofN
Units mag_variation = degreesEofN
Units fix_quality = unitless
Units nmbr_satellites = unitless
Units altitude = m
Units pps = ms
Units dt_since_gprmc = s
Units gps_ready = unitless
Units max_clock_change = ms
Units nmbr_clock_change = occurrences

Public instant_WS, instant_WD
Units instant_WS = m/s
Units instant_WD = degreesEofN
Public work_out(4)
Alias work_out(1) = wnd_spd
Alias work_out(2) = rslt_wnd_spd
Alias work_out(3) = rslt_wnd_dir
Alias work_out(4) = std_wnd_dir
Units wnd_spd = m/s
Units rslt_wnd_spd = m/s
Units rslt_wnd_dir = degreesEofN
Units std_wnd_dir = degrees

DataTable(work,True,1)
  TableHide
  DataInterval(0,1,Min,1)
  WindVector(1,-1*csat3b_Uy,csat3b_Ux,FP2,csat3b_diag,0,1,2)
EndTable

DataTable(tsfast,True,-1)
  DataInterval(0,100,mSec,10)
  CardOut(0,84600*10*DAYS_OF_DATA)
  Sample(5,CSATvals(1),IEEE4)
EndTable

DataTable(tsdata,True,-1)
  DataInterval(0,1,Sec,5)
  CardOut(0,86400*DAYS_OF_DATA)
  Sample(1,dusttrak2_analog_pm25,FP2)
  Sample(1,li840a_CO2,IEEE4)
  Sample(1,li840a_H2O,IEEE4)
  Sample(1,li840a_analog_CO2,IEEE4)
EndTable

DataTable(minutely,True,-1)
  DataInterval(0,1,Min,1)
  CardOut(0,1440*DAYS_OF_DATA)
  Sample(1,dusttrak2_analog_pm25,FP2)
  Average(1,li840a_CO2,IEEE4,li840a_CO2=NAN)
  Average(1,li840a_H2O,IEEE4,li840a_H2O=NAN)
  Average(1,li840a_cell_T,IEEE4,li840a_cell_T=NAN)
  Average(1,li840a_cell_P,IEEE4,li840a_cell_P=NAN)
  Average(1,li840a_dewpoint,IEEE4,li840a_dewpoint=NAN)
  Average(1,li840a_pwr_src,IEEE4,li840a_pwr_src=NAN)
  Average(1,latitude_deg,FP2,latitude_deg=NAN)
  Average(1,latitude_min,IEEE4,latitude_min=NAN)
  Average(1,longitude_deg,FP2,longitude_deg=NAN)
  Average(1,longitude_min,IEEE4,longitude_min=NAN)
  Median(1,mag_variation,60,FP2,mag_variation=NAN)
  Minimum(1,gps_ready,FP2,gps_ready=NAN,0)
  Average(1,csat3b_boardTemp,FP2,csat3b_boardTemp=NAN)
  Average(1,csat3b_boardHumidity,FP2,csat3b_boardHumidity=NAN)
  Average(1,csat3b_inclinePitch,FP2,csat3b_inclinePitch=NAN)
  Average(1,csat3b_inclineRoll,FP2,csat3b_inclineRoll=NAN)
  Sample(1,csat3b_azimuth,FP2)
  Sample(1,work_out(1),IEEE4)
EndTable


'===========================================================================
BeginProg
  SetStatus("StationName", "tracer-stationary")
  li840a_config = ("<li840><cfg><outrate>1</outrate></cfg><rs232><co2>true</co2>" & _
        "<co2abs>false</co2abs><h2o>true</h2o><h2odewpoint>true</h2odewpoint>" & _
        "<h2oabs>false</h2oabs><celltemp>true</celltemp><cellpres>true</cellpres>" & _
        "<ivolt>true</ivolt><raw>false</raw><strip>true</strip></rs232></li840>")
  li840a_resp = ("<li840><ack>true</ack></li840>")
  SerialOpen(LI840A_COM,LI840A_BAUD,LI840A_FMT,0,LI840A_BUFF)
  SerialOut(LI840A_COM,li840a_config,li840a_resp,3,1)

  Scan(100,mSec,0,0)
    CSAT3B(CSATvals(1),0,CSAT_SDM_ADDR,0)
    CallTable(tsfast)
    CallTable(work)
    If (work.Output(1,1) ) Then
      GetRecord(work_out(1),work,1)
      rslt_wnd_dir = (360 + rslt_wnd_dir + csat3b_azimuth) MOD 360
    EndIf
  NextScan

  SlowSequence
	Scan(1,Sec,0,0)
	  VoltDiff(dusttrak2_analog_pm25,1,mv5000,DF_TSI_PM,True,0,250,TSI_PM_MLT,TSI_PM_OFF)
    VoltDiff(li840a_analog_CO2,1,mv5000,DF_LI840A_CO2,True,0,250,LI840A_CO2_MLT,LI840A_CO2_OFF)

    SerialIn(li840a_record,LI840A_COM,50,&h0A,LI840A_BUFF)
    If (Len(li840a_record)) Then
      SplitStr(li840a(1),li840a_record,"",6,0)
    Else
      Move(li840a(1),6,NAN,1)
    EndIf

    instant_WS = SQR(csat3b_Ux*csat3b_Ux + csat3b_Uy*csat3b_Uy)
    instant_WD = INT(ATN2(-1*csat3b_Ux,-1*csat3b_Uy)*DperR + CSAT_VAZ + _
                     csat3b_azimuth + 360) MOD 360  

    CallTable(tsdata)    
    CallTable(minutely)
	NextScan

  SlowSequence
  Scan(1,Min,0,0)
    GPS (latitude_deg,GPS_COM_ADDR,UTC_OFFSET*3600,0,nmea_sentence(1))
    CSAT3BMonitor(CSATmeta(1),0,CSAT_SDM_ADDR)
  NextScan
EndProg


